---
API: 3
OpenSesame: 4.0.37
Platform: posix
---
set width 1024
set title value_levels_2
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend osweb
set round_decimals 2
set mouse_backend osweb
set keyboard_backend osweb
set jatos_uuid "25564019-df5c-eed9-9039-84b30e86efa9"
set jatos_end_redirect_url "https://app.prolific.com/submissions/complete?cc=C1HACXUF"
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path "/Users/dockduncan/Library/CloudStorage/OneDrive-VrijeUniversiteitAmsterdam/Online Experiments"
set disable_garbage_collection False
set description "The main experiment item"
set color_backend osweb
set clock_backend osweb
set canvas_backend osweb
set background "#646464"

define sketchpad Qage_01
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=17 html=yes show_if=always text="Gender : [response_gender]<br />Age : [response_age_10]X<br /><br /><br /><br /><br /><br /><br /><br />what is your age?<br /><br />Please type this in now" x=0 y=-32 z_index=0

define sketchpad Qage_10_
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=17 html=yes show_if=always text="Gender : [response_gender]<br />Age : XX<br /><br /><br /><br /><br /><br /><br /><br />what is your age?<br /><br />Please type this in now" x=0 y=-32 z_index=0

define sketchpad Qgender
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=17 html=yes show_if=always text="Gender : X<br />Age : XX<br /><br /><br /><br /><br /><br /><br /><br />what is your gender?<br /><br />Press 'M' for male, 'F' for female, or 'X' if you would rather not say" x=0 y=-32 z_index=0

define sequence age01
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Qage_01 always
	run age_01 always

define loop age01_1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run age01

define sequence age10
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Qage_10_ always
	run age_10 always

define loop age10_1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run age10

define keyboard_response age_01
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "0;1;2;3;4;5;6;7;8;9"

define keyboard_response age_10
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "0;1;2;3;4;5;6;7;8;9"

define sketchpad before_experiment
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=17 html=yes show_if=always text="Great Job! Its now time to start the real experiment.<br /><br />You will now do 8 blocks of the tasks you just completed<br />Each block should take less than four minutes. <br />Between each block you are offered a short break so that you dont become tired.<br />There are no breaks once a block starts so<br />make sure you are ready before you begin!<br /><br />Also, we will now reduce how often you get trial feedback. <br />Sometimes you will be told how many points you got<br />on the previous trial, but usually you will not know.<br />We will tell you at the end of each block though.<br />You will receive points even if you get no feedback.<br /><br /><br />If everything is clear and you are ready to start the experiment, press any key to begin<br /><br />" x=0 y=0 z_index=0

define sketchpad before_experiment_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=17 html=yes show_if=always text="Also, a friendly reminder that you may quit this experiment at any time if you like.  <br /><br />In order to use your data then your overall accuracy must remain above a certain percent. <br />We review every participants results before payment to make sure it doesn't look like <br />you are guessing. For this reason, if you find the experiment too difficult<br />or too boring then please quit rather than continue.<br />There is absolutely no penalty for quitting...<br /><br />Press any key to continue " x=0 y=0 z_index=0

define inline_javascript block_counter
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	set _prepare "// vars.block_trial = 0"

define loop block_loop
	set source table
	set repeat 4
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 empty_column ""
	run block_sequence

define sequence block_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run trial_loop True

define feedback break_screen
	set reset_variables no
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Its time for a break!<br /><br />You have completed [block] of the 8 blocks<br /><br />You have collected [agg_points] points so far!<br /><br />Your average Response Time in the last block was [block_rt] seconds <br />(for the whole experiment: [agg_rt] seconds)<br /><br />Your average Accuracy in the last block was [block_acc]% <br />(for the whole experiment: [agg_acc]%)<br /><br />Please take a break now, rest your eyes, and make sure that you are not<br />too tired before continuing<br /><br />Press any key to begin the next block..." x=0 y=0 z_index=0

define keyboard_response check
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "return;backspace"

define sketchpad checkInfo
	set duration 0
	set description check
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=17 html=yes show_if=always text="Gender : [response_gender]<br />Age : [response_age_10][response_age_01]<br /><br /><br /><br /><br /><br /><br /><br />Is the above information correct?<br /><br />(If yes: press enter, if no: press backspace)" x=0 y=-32 z_index=0

define loop demographics_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run demographics_sequence

define sequence demographics_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Qgender always
	run gender always
	run age10_1 always
	run age01_1 always
	run response_check always
	run repeat_demographics "[response] = 'backspace'"

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run informedConsent True
	run informed_consent True
	run vars True
	run demographics_loop False
	run inst False
	run instruction_loop True
	run practice_loop True
	run before_experiment True
	run before_experiment_2 True
	run pre_stim True
	run practice_end True
	run block_loop True
	run finish_search_trials True
	run the_end True
	run prolific_link True
	run the_end_keypress True

define sketchpad finish_search_trials
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="You have finished all the search trials,<br />Great job!!!<br /><br />You managed to collected [agg_points] points in total! Well done!<br /><br />This concludes the experiment, on the next screen <br />we will explain what we were looking for with this research, <br />and also how much bonus you will be paid.<br />And then we will link you back to prolific." x=0 y=0 z_index=0

define keyboard_response gender
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "m;f;x;M;F;X"

define sketchpad informedConsent
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=17 html=yes show_if=always text="<b>Informed consent</b><br /><br />You are being asked to participate in a research study that is conducted by <br />dr. Dock Duncan and prof. dr. Jan Theeuwes,<br />Department of Experimental and Applied Psychology at Vrije Universiteit Amsterdam.<br />This first page provides some information about your participation in the study.<br /><br />If you agree to participate, you will perform a simple behavioral task<br />in which you have to identify one of several objects on the screen.<br />You will be paid £6.50 for completing the study.<br /><br />The study should take less than 50 minutes (depending on breaks).<br />Some people who skip their breaks (which is allowed) finish in less than 35 minutes.<br /><br />Your involvement in the study is voluntary, and you may choose not to participate.<br />Your data will be anonymous. <br />There are no names or identifying information associated with the data.<br />We do not store your IP address.<br />If at any time you feel uncomfortable, either because of the behavioral task,<br />the questions you are asked or for any other reason,<br />you have the right to withdraw. There is no penalty for withdrawing.<br /><br /><br />For further information about the study you can contact Docky Duncan - d.h.duncan@vu.nl<br /><br />By pressing the 'Y' keyboard key, you agree to the above terms.<br />If you do not agree, please close this browser tab.<br /><br /><br />Press the 'Y' keyboard key to continue...<br /><br />" x=0 y=0 z_index=0

define keyboard_response informed_consent
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "y; Y"

define sketchpad inst
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=17 html=yes show_if=always text="Thank you for choosing to participate in our experiment!<br /><br />In an ideal world we would have you come to the lab to complete this experiment. Alas, that is not <br />possible, but hopefully this way is a little more comfortable for you! It is still however very <br />important to us that you are able to recreate the experience of completing an experiment in the lab <br />from your own home. For this reason we ask that you make sure to follow a couple of guidelines:<br /><br /><br /><br />1) Please make sure that you are in a quiet environment without distractions. You should be focused<br />on the task you are about to do just like if you were in an empty cubicle.<br /><br />2) Please make sure the experiment is on full screen and that you are sitting about 60cm away from<br />your computer.<br /><br />3) Please pay attention during this experiment and  respond as quickly as possible. If you feel <br />yourself getting tired then we offer many brakes during the experiment, please use these to<br />recharge your mental batteries, it is important that you stay fresh!<br /><br /><br /><br />I hope that this doesnt sound too difficult to you! If you feel at any point that you cannot<br />complete the experiment then please do stop, its not nice to continue a task that you arent able<br />to perform and we wont be able to use your data if it is below a certain quality anyway<br /><br />In the next few slides we will explain the task you will be performing today. Please read through<br />the following instructions carefully, as going back to a previous slide is not possible!<br /><br /><br />Press any key to continue...<br /><br />" x=0 y=0 z_index=0

define sketchpad inst_1
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="prf-02.png" scale=0.2 show_if=True x=75 y=0 z_index=0
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0
	draw circle color="#646464" fill=0 penwidth=240 r=320 show_if=True x=0 y=0 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=0 x2=0 y1=-341.25 y2=-221.25 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=205.66 x2=205.66 y1=-258.91 y2=-138.91 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=293.75 x2=293.75 y1=-60 y2=60 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=205.66 x2=205.66 y1=138.91 y2=258.91 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=0 x2=0 y1=221.25 y2=341.25 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=-266.79 x2=-144.53 y1=198.91 y2=198.91 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=-293.75 x2=-293.75 y1=-60 y2=60 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=-205.66 x2=-205.66 y1=-258.91 y2=-138.91 z_index=0
	draw circle color="#646464" fill=1 penwidth=1 r=8 show_if=True x=0 y=-281.25 z_index=0
	draw circle color="#646464" fill=1 penwidth=1 r=8 show_if=True x=293.75 y=0 z_index=0
	draw circle color="#646464" fill=1 penwidth=1 r=8 show_if=True x=-205.66 y=198.91 z_index=0
	draw circle color="#646464" fill=1 penwidth=1 r=8 show_if=True x=-293.75 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to continue..." x=0 y=352 z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="The  task you will perform<br />will use an array of lines <br />like the one on the screen now<br />" x=-480 y=-352 z_index=0

define sketchpad inst_2
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="prf-02.png" scale=0.2 show_if=True x=75 y=0 z_index=0
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0
	draw circle color="#646464" fill=0 penwidth=240 r=320 show_if=True x=0 y=0 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=0 x2=0 y1=-341.25 y2=-221.25 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=205.66 x2=205.66 y1=-258.91 y2=-138.91 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=293.75 x2=293.75 y1=-60 y2=60 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=205.66 x2=205.66 y1=138.91 y2=258.91 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=0 x2=0 y1=221.25 y2=341.25 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=-266.79 x2=-144.53 y1=198.91 y2=198.91 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=-293.75 x2=-293.75 y1=-60 y2=60 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=-205.66 x2=-205.66 y1=-258.91 y2=-138.91 z_index=0
	draw circle color="#646464" fill=1 penwidth=1 r=8 show_if=True x=0 y=-281.25 z_index=0
	draw circle color="#646464" fill=1 penwidth=1 r=8 show_if=True x=293.75 y=0 z_index=0
	draw circle color="#646464" fill=1 penwidth=1 r=8 show_if=True x=-205.66 y=198.91 z_index=0
	draw circle color="#646464" fill=1 penwidth=1 r=8 show_if=True x=-293.75 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to continue..." x=0 y=448 z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Your job on every trial will be very <br />simple... Your task involves the<br />grey bars on the screen (not the<br />black and white <br />checkerboard) On <br />every trial there will <br />be one grey line pointing <br />in a different direction <br />than all the others.<br />You will also notice <br />that half of the lines<br />contain a dot inside <br />them" x=-480 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to continue..." x=0 y=352 z_index=0

define sketchpad inst_3
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="prf-02.png" scale=0.2 show_if=True x=75 y=0 z_index=0
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0
	draw circle color="#646464" fill=0 penwidth=240 r=320 show_if=True x=0 y=0 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=0 x2=0 y1=-341.25 y2=-221.25 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=205.66 x2=205.66 y1=-258.91 y2=-138.91 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=293.75 x2=293.75 y1=-60 y2=60 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=205.66 x2=205.66 y1=138.91 y2=258.91 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=0 x2=0 y1=221.25 y2=341.25 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=-266.79 x2=-144.53 y1=198.91 y2=198.91 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=-293.75 x2=-293.75 y1=-60 y2=60 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=-205.66 x2=-205.66 y1=-258.91 y2=-138.91 z_index=0
	draw circle color="#646464" fill=1 penwidth=1 r=8 show_if=True x=0 y=-281.25 z_index=0
	draw circle color="#646464" fill=1 penwidth=1 r=8 show_if=True x=293.75 y=0 z_index=0
	draw circle color="#646464" fill=1 penwidth=1 r=8 show_if=True x=-205.66 y=198.91 z_index=0
	draw circle color="#646464" fill=1 penwidth=1 r=8 show_if=True x=-293.75 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to continue..." x=0 y=448 z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Your job will be to report whether the <br />line pointing in a unique directon <br />contains a dot inside it or not.<br />As you can see on this <br />example it does. If <br />this is the case you <br />will need to press <br />the 's' key. Please <br />press the 's' key <br />now!" x=-480 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press the 's' key to continue" x=0 y=352 z_index=0
	draw arrow arrow_body_length=0.8 arrow_body_width=0.5 arrow_head_width=30 color=white fill=0 penwidth=1 show_if=True x1=-288 x2=-224 y1=288 y2=224 z_index=0

define sketchpad inst_4
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="prf-02.png" scale=0.2 show_if=True x=75 y=0 z_index=0
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0
	draw circle color="#646464" fill=0 penwidth=240 r=320 show_if=True x=0 y=0 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=0 x2=0 y1=-341.25 y2=-221.25 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=205.66 x2=205.66 y1=-258.91 y2=-138.91 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=293.75 x2=293.75 y1=-60 y2=60 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=205.66 x2=205.66 y1=138.91 y2=258.91 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=0 x2=0 y1=221.25 y2=341.25 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=-266.79 x2=-144.53 y1=198.91 y2=198.91 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=-293.75 x2=-293.75 y1=-60 y2=60 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=-205.66 x2=-205.66 y1=-258.91 y2=-138.91 z_index=0
	draw circle color="#646464" fill=1 penwidth=1 r=8 show_if=True x=0 y=-281.25 z_index=0
	draw circle color="#646464" fill=1 penwidth=1 r=8 show_if=True x=293.75 y=0 z_index=0
	draw circle color="#646464" fill=1 penwidth=1 r=8 show_if=True x=0 y=281.25 z_index=0
	draw circle color="#646464" fill=1 penwidth=1 r=8 show_if=True x=-293.75 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to continue..." x=0 y=448 z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="On half of the trials it will not<br />contain a dot. like what you see now. <br />In this case you should press the <br />'a' key on your keyboard.<br />Please press 'a' now!" x=-480 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press the 'a' key to continue" x=0 y=352 z_index=0

define sketchpad inst_5
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="prf-02.png" scale=0.2 show_if=True x=125 y=0 z_index=0
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0
	draw circle color="#646464" fill=0 penwidth=240 r=320 show_if=True x=0 y=0 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=0 x2=0 y1=-341.25 y2=-221.25 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=205.66 x2=205.66 y1=-258.91 y2=-138.91 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=293.75 x2=293.75 y1=-60 y2=60 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=205.66 x2=205.66 y1=138.91 y2=258.91 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=0 x2=0 y1=221.25 y2=341.25 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=-266.79 x2=-144.53 y1=198.91 y2=198.91 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=-293.75 x2=-293.75 y1=-60 y2=60 z_index=0
	draw line color="[h1]" penwidth=30 show_if=True x1=-205.66 x2=-205.66 y1=-258.91 y2=-138.91 z_index=0
	draw circle color="#646464" fill=1 penwidth=1 r=8 show_if=True x=0 y=-281.25 z_index=0
	draw circle color="#646464" fill=1 penwidth=1 r=8 show_if=True x=293.75 y=0 z_index=0
	draw circle color="#646464" fill=1 penwidth=1 r=8 show_if=True x=-205.66 y=198.91 z_index=0
	draw circle color="#646464" fill=1 penwidth=1 r=8 show_if=True x=-293.75 y=0 z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Importantly, on some trials one of the <br />lines will be a unique color. This is a <br />distractor, and it is there to slow you <br />down. However, the <br />distractor also tells <br />you something about <br />the current trial: how <br />many points it is worth..." x=-480 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to continue..." x=0 y=352 z_index=0
	draw arrow arrow_body_length=0.8 arrow_body_width=0.5 arrow_head_width=30 color=white fill=0 penwidth=1 show_if=True x1=-96 x2=-160 y1=-160 y2=-192 z_index=0

define sketchpad inst_6
	set duration keypress
	set description "Displays stimuli"
	draw line color="[l2]" penwidth=30 show_if=True x1=-394.79 x2=-272.53 y1=-250 y2=-250 z_index=0
	draw line color="[l1]" penwidth=30 show_if=True x1=-394.79 x2=-272.53 y1=-90 y2=-90 z_index=0
	draw line color="[h2]" penwidth=30 show_if=True x1=-394.79 x2=-272.53 y1=70 y2=70 z_index=0
	draw line color="[h1]" penwidth=30 show_if=True x1=-394.79 x2=-272.53 y1=230 y2=230 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to continue..." x=0 y=352 z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=15 html=yes show_if=always text="So here is how the reward structure of this experiment works,<br />its a little bit complicated...<br /><br />We guarantee that you will be paid 6.5 pounds in this experiment.<br />However, if you get enough points we will pay you extra.<br />How much extra will be determined by how many points you<br />accumulated.<br /><br />On every trial you earn points. These points are based on<br />how fast you respond. If you respond fast you get more points.<br />If you respond slow, you get less. In any case, if you provide<br />an incorrect answer then you get no points. so both<br />speed and accuracy are important in this task.<br /><br />You will accumulate points through the entire experiment. At the <br />end of the experiment we will look at how many points you have. <br />If you manage to achieve more than 40,000 points, we will pay <br />you extra money. The ammount extra will be based on how many <br />points above 40,000 you got. We will not tell you how much money <br />one point is worth at this time, only at the end of the experiment.<br /><br />Accuracy is also important because if your accuracy is below a<br />certain percentage, we will not pay you at all.<br /><br />We will explain what the distractors mean in the next screen" x=-128 y=-288 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to continue..." x=0 y=352 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=15 html=yes show_if=True text="Normal<br />Value" x=-224 y=-270 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=25 html=yes show_if=True text="X 2" x=-224 y=-110 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=35 html=yes show_if=True text="X 5" x=-224 y=50 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=50 html=yes show_if=True text="X 10 !!!" x=-224 y=210 z_index=0

define sketchpad inst_7
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="And thats it! Its a pretty simple task.<br /><br />So as a review:<br />On each trial, find the bar that is facing a unique direction<br />If this bar contains a dot, press press 's'<br />If this bar does not contain a dot, press 'a'<br /><br />Do your best to ignore the distractors.<br />After each trial we will tell you how many points<br />you got.<br /><br />Another thing is that there will be a long pause between<br />trials, so dont panic if the screen is empty for a few seconds<br /><br />We will now do 40 practice trials - if the instructions<br />are still a bit unclear then dont worry, most people get<br />it once they start doing the practice.<br /><br />Press any button to begin practice!" x=0 y=0 z_index=0

define loop instruction_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run new_1_sequence

define logger logger
	set description "Logs experimental data"
	set auto_log yes
	log acc
	log accuracy
	log agg_acc
	log agg_acc_cnt
	log agg_rt
	log agg_rt_cnt
	log average_response_time
	log avg_rt
	log base_orientation
	log block
	log block_acc
	log block_acc_cnt
	log block_rt
	log block_rt_cnt
	log block_trial
	log correct
	log correct_response
	log count_trial
	log datetime
	log dist_set
	log distractor_present
	log height
	log imsz
	log iti
	log jatosStudyResultId
	log jatos_uuid
	log loc_dist
	log loc_tar
	log practice
	log participantId
	log radius
	log ratings
	log response
	log response_age_01
	log response_age_10
	log response_gender
	log response_hunger
	log response_time
	log sessionid
	log show_extra_line
	log show_image
	log shuffled_locs
	log singleton_index
	log subject_nr
	log target_present
	log total_correct
	log total_response_time
	log total_responses
	log trial_nr
	log trial_shape
	log trial_x
	log trial_y
	log width
	log left_stim
	log right_stim

define keyboard_response new_1_keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses a

define sequence new_1_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run inst_1 True
	run inst_2 True
	run inst_3 True
	run new_keyboard_response True
	run inst_4 True
	run new_1_keyboard_response True
	run new_5_sketchpad True
	run new_1_sketchpad True
	run inst_5 True
	run inst_6 True
	run new_2_sketchpad True
	run inst_7 True

define sketchpad new_1_sketchpad
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="prf-02.png" scale=0.2 show_if=True x=75 y=0 z_index=0
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0
	draw circle color="#646464" fill=0 penwidth=240 r=320 show_if=True x=0 y=0 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=0 x2=0 y1=-341.25 y2=-221.25 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=205.66 x2=205.66 y1=-258.91 y2=-138.91 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=293.75 x2=293.75 y1=-60 y2=60 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=205.66 x2=205.66 y1=138.91 y2=258.91 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=0 x2=0 y1=221.25 y2=341.25 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=-266.79 x2=-144.53 y1=198.91 y2=198.91 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=-293.75 x2=-293.75 y1=-60 y2=60 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=-205.66 x2=-205.66 y1=-258.91 y2=-138.91 z_index=0
	draw circle color="#646464" fill=1 penwidth=1 r=8 show_if=True x=0 y=-281.25 z_index=0
	draw circle color="#646464" fill=1 penwidth=1 r=8 show_if=True x=293.75 y=0 z_index=0
	draw circle color="#646464" fill=1 penwidth=1 r=8 show_if=True x=-205.66 y=198.91 z_index=0
	draw circle color="#646464" fill=1 penwidth=1 r=8 show_if=True x=-293.75 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to continue..." x=0 y=448 z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Another notable thing is that on <br />every trial there will be a a black <br />and white bar on the screen.<br />This has nothing at <br />all to do with your <br />task  so please just <br />ignore it!" x=-480 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to continue..." x=0 y=352 z_index=0
	draw arrow arrow_body_length=0.8 arrow_body_width=0.5 arrow_head_width=30 color=white fill=0 penwidth=1 show_if=True x1=256 x2=128 y1=0 y2=0 z_index=0

define sketchpad new_2_sketchpad
	set duration keypress
	set description "Displays stimuli"
	draw line color="[l2]" penwidth=30 show_if=True x1=-394.79 x2=-272.53 y1=-250 y2=-250 z_index=0
	draw line color="[l1]" penwidth=30 show_if=True x1=-394.79 x2=-272.53 y1=-90 y2=-90 z_index=0
	draw line color="[h2]" penwidth=30 show_if=True x1=-394.79 x2=-272.53 y1=70 y2=70 z_index=0
	draw line color="[h1]" penwidth=30 show_if=True x1=-394.79 x2=-272.53 y1=230 y2=230 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to continue..." x=0 y=352 z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=15 html=yes show_if=always text="So on most trials there will be a color distractor which is<br />there to slow you down.<br /><br />However, the color of this distractor also indicates how many points<br />that trial is worth. If the distractor is colored [low_val_col] then you will get<br />the basic ammount of points (calculated based on how fast you respond).<br /><br />However, if the distractor is [high_val_col] then it is a bonus trial, and <br />the points you get on that trial will be multiplied by ten. In practice,<br />this means these trials are very important if you want to achieve bonus<br />payment in this experiment.<br /><br />The colors inbetween [low_val_col] and [high_val_col] also will give bonuses, but<br />smaller. You can see the specific bonuses on the left of this screen.<br />What this means is the more [high_val_col] the distractor is, the more points<br />you get.<br /><br />Trials with no distractor just give the basic number of points." x=-128 y=-288 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to continue..." x=0 y=352 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=15 html=yes show_if=True text="Normal<br />Value" x=-224 y=-270 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=25 html=yes show_if=True text="X 2" x=-224 y=-110 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=35 html=yes show_if=True text="X 5" x=-224 y=50 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=50 html=yes show_if=True text="X 10 !!!" x=-224 y=210 z_index=0

define sketchpad new_5_sketchpad
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="prf-02.png" scale=0.2 show_if=True x=75 y=0 z_index=0
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0
	draw circle color="#646464" fill=0 penwidth=240 r=320 show_if=True x=0 y=0 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=0 x2=0 y1=-341.25 y2=-221.25 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=205.66 x2=205.66 y1=-258.91 y2=-138.91 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=293.75 x2=293.75 y1=-60 y2=60 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=205.66 x2=205.66 y1=138.91 y2=258.91 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=0 x2=0 y1=221.25 y2=341.25 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=-266.79 x2=-144.53 y1=198.91 y2=198.91 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=-293.75 x2=-293.75 y1=-60 y2=60 z_index=0
	draw line color="[grey_]" penwidth=30 show_if=True x1=-205.66 x2=-205.66 y1=-258.91 y2=-138.91 z_index=0
	draw circle color="#646464" fill=1 penwidth=1 r=8 show_if=True x=0 y=-281.25 z_index=0
	draw circle color="#646464" fill=1 penwidth=1 r=8 show_if=True x=293.75 y=0 z_index=0
	draw circle color="#646464" fill=1 penwidth=1 r=8 show_if=True x=0 y=281.25 z_index=0
	draw circle color="#646464" fill=1 penwidth=1 r=8 show_if=True x=-293.75 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to continue..." x=0 y=448 z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="And that is your main task!<br />Pretty easy right?<br />So you find the unique line, and press<br />'s' if it contains a dot <br />or 'a' if it does not." x=-480 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to continue" x=0 y=352 z_index=0

define keyboard_response new_keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses s

define feedback points_feedback
	set reset_variables no
	set duration 1000
	set description "Provides feedback to the participant"
	draw fixdot color=black show_if=True style="large-open" x=0 y=0 z_index=0
	draw textline center=1 color="[text_col]" font_bold=no font_family=mono font_italic=no font_size=50 html=yes show_if="[feedback]" text="+ [trial_points]" x=0 y=-32 z_index=0
	draw textline center=1 color="[text_col]" font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if="[incorrect]" text="incorrect!" x=0 y=32 z_index=0

define sketchpad post_stim
	set duration "[iti2]"
	set description "Displays stimuli"
	draw fixdot color=black show_if=True style="large-open" x=0 y=0 z_index=0

define inline_javascript practice_end
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	vars.practice = 0
	
	vars.trial_nr = 0
	
	vars.trial_points = 0
	
	vars.agg_points = 0
	
	vars.block_rt_cnt = 0
	
	vars.agg_rt_cnt = 0
	
	vars.block_acc_cnt = 0
	
	vars.agg_acc_cnt = 0
	                        
	vars.block = 0
	__end__
	set _prepare ""

define loop practice_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 empty_column ""
	run practice_sequence

define sequence practice_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run reset_feedback True
	run pre_stim True
	run practice_trial_loop True
	run repeat_cycle True
	run repeat_screen "[acc] <= 55"

define loop practice_trial_loop
	set source table
	set repeat 0.3
	set order random
	set description "Repeatedly runs another item"
	set cycles 120
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 dist_col 0
	setcycle 0 loc_dist 1
	setcycle 0 loc_tar 3
	setcycle 1 dist_col 0
	setcycle 1 loc_dist 1
	setcycle 1 loc_tar 5
	setcycle 2 dist_col 0
	setcycle 2 loc_dist 1
	setcycle 2 loc_tar 7
	setcycle 3 dist_col 0
	setcycle 3 loc_dist 3
	setcycle 3 loc_tar 1
	setcycle 4 dist_col 0
	setcycle 4 loc_dist 3
	setcycle 4 loc_tar 5
	setcycle 5 dist_col 0
	setcycle 5 loc_dist 3
	setcycle 5 loc_tar 7
	setcycle 6 dist_col 0
	setcycle 6 loc_dist 5
	setcycle 6 loc_tar 1
	setcycle 7 dist_col 0
	setcycle 7 loc_dist 5
	setcycle 7 loc_tar 3
	setcycle 8 dist_col 0
	setcycle 8 loc_dist 5
	setcycle 8 loc_tar 7
	setcycle 9 dist_col 0
	setcycle 9 loc_dist 7
	setcycle 9 loc_tar 1
	setcycle 10 dist_col 0
	setcycle 10 loc_dist 7
	setcycle 10 loc_tar 3
	setcycle 11 dist_col 0
	setcycle 11 loc_dist 7
	setcycle 11 loc_tar 5
	setcycle 12 dist_col 1
	setcycle 12 loc_dist 1
	setcycle 12 loc_tar 3
	setcycle 13 dist_col 1
	setcycle 13 loc_dist 1
	setcycle 13 loc_tar 5
	setcycle 14 dist_col 1
	setcycle 14 loc_dist 1
	setcycle 14 loc_tar 7
	setcycle 15 dist_col 1
	setcycle 15 loc_dist 3
	setcycle 15 loc_tar 1
	setcycle 16 dist_col 1
	setcycle 16 loc_dist 3
	setcycle 16 loc_tar 5
	setcycle 17 dist_col 1
	setcycle 17 loc_dist 3
	setcycle 17 loc_tar 7
	setcycle 18 dist_col 1
	setcycle 18 loc_dist 5
	setcycle 18 loc_tar 1
	setcycle 19 dist_col 1
	setcycle 19 loc_dist 5
	setcycle 19 loc_tar 3
	setcycle 20 dist_col 1
	setcycle 20 loc_dist 5
	setcycle 20 loc_tar 7
	setcycle 21 dist_col 1
	setcycle 21 loc_dist 7
	setcycle 21 loc_tar 1
	setcycle 22 dist_col 1
	setcycle 22 loc_dist 7
	setcycle 22 loc_tar 3
	setcycle 23 dist_col 1
	setcycle 23 loc_dist 7
	setcycle 23 loc_tar 5
	setcycle 24 dist_col 2
	setcycle 24 loc_dist 1
	setcycle 24 loc_tar 3
	setcycle 25 dist_col 2
	setcycle 25 loc_dist 1
	setcycle 25 loc_tar 5
	setcycle 26 dist_col 2
	setcycle 26 loc_dist 1
	setcycle 26 loc_tar 7
	setcycle 27 dist_col 2
	setcycle 27 loc_dist 3
	setcycle 27 loc_tar 1
	setcycle 28 dist_col 2
	setcycle 28 loc_dist 3
	setcycle 28 loc_tar 5
	setcycle 29 dist_col 2
	setcycle 29 loc_dist 3
	setcycle 29 loc_tar 7
	setcycle 30 dist_col 2
	setcycle 30 loc_dist 5
	setcycle 30 loc_tar 1
	setcycle 31 dist_col 2
	setcycle 31 loc_dist 5
	setcycle 31 loc_tar 3
	setcycle 32 dist_col 2
	setcycle 32 loc_dist 5
	setcycle 32 loc_tar 7
	setcycle 33 dist_col 2
	setcycle 33 loc_dist 7
	setcycle 33 loc_tar 1
	setcycle 34 dist_col 2
	setcycle 34 loc_dist 7
	setcycle 34 loc_tar 3
	setcycle 35 dist_col 2
	setcycle 35 loc_dist 7
	setcycle 35 loc_tar 5
	setcycle 36 dist_col 3
	setcycle 36 loc_dist 1
	setcycle 36 loc_tar 3
	setcycle 37 dist_col 3
	setcycle 37 loc_dist 1
	setcycle 37 loc_tar 5
	setcycle 38 dist_col 3
	setcycle 38 loc_dist 1
	setcycle 38 loc_tar 7
	setcycle 39 dist_col 3
	setcycle 39 loc_dist 3
	setcycle 39 loc_tar 1
	setcycle 40 dist_col 3
	setcycle 40 loc_dist 3
	setcycle 40 loc_tar 5
	setcycle 41 dist_col 3
	setcycle 41 loc_dist 3
	setcycle 41 loc_tar 7
	setcycle 42 dist_col 3
	setcycle 42 loc_dist 5
	setcycle 42 loc_tar 1
	setcycle 43 dist_col 3
	setcycle 43 loc_dist 5
	setcycle 43 loc_tar 3
	setcycle 44 dist_col 3
	setcycle 44 loc_dist 5
	setcycle 44 loc_tar 7
	setcycle 45 dist_col 3
	setcycle 45 loc_dist 7
	setcycle 45 loc_tar 1
	setcycle 46 dist_col 3
	setcycle 46 loc_dist 7
	setcycle 46 loc_tar 3
	setcycle 47 dist_col 3
	setcycle 47 loc_dist 7
	setcycle 47 loc_tar 5
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	setcycle 96 dist_col 99
	setcycle 96 loc_dist 9
	setcycle 96 loc_tar 1
	setcycle 97 dist_col 99
	setcycle 97 loc_dist 9
	setcycle 97 loc_tar 3
	setcycle 98 dist_col 99
	setcycle 98 loc_dist 9
	setcycle 98 loc_tar 5
	setcycle 99 dist_col 99
	setcycle 99 loc_dist 9
	setcycle 99 loc_tar 7
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	run practice_trial_sequence

define sequence practice_trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run trial_script True
	run trial True
	run trial_keyboard_response True
	run update_block_stats True
	run pre_feedback True
	run points_feedback True
	run post_stim True
	run logger True

define sketchpad pre_feedback
	set duration "[iti1]"
	set description "Displays stimuli"
	draw fixdot color=black show_if=True style="large-open" x=0 y=0 z_index=0

define sketchpad pre_stim
	set duration 3000
	set description "Displays stimuli"
	draw fixdot color=black show_if=True style="large-open" x=0 y=0 z_index=0

define sketchpad prolific_link
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="We will now transfer the final data to the server.<br />This is a process that can (sometimes) take a while.<br />It has in the past taken up to 30 minutes to transfer.<br />(to be honest we have no idea why it takes so long for some people)<br /><br />For this reason, feel free to leave the data transfer running <br />on a background tab and go ahead and submit the <br />completion code below to conclude the experiment on prolific:<br /><br /><br />C 1 H A C X U F<br /><br /><br />After data transfer this code will be shown to you again<br />on prolific (in case you exit this screen without writing it down)<br /><br /><br />Thank you for participating! <br /><br />Press the 'e'-key to begin data transfer...<br />👋 👋 👋<br />" x=0 y=0 z_index=0

define repeat_cycle repeat_cycle
	set description "Optionally repeat a cycle from a loop"
	set condition "[acc] <= 55"

define repeat_cycle repeat_demographics
	set description "Optionally repeat a cycle from a loop"
	set condition "[response] = 'backspace'"

define sketchpad repeat_screen
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=17 html=yes show_if=always text="Your accuracy is below 50%. <br />Are you sure you are doing the task correctly?<br /><br />As a reminder,<br />find the grey bar facing a unique direction<br />press 's' if it containsdot<br />press 'a' if it does not<br /><br />Press any key to practice more trials...<br />" x=0 y=0 z_index=0

define reset_feedback reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define loop response_check
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run response_check_2

define sequence response_check_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run checkInfo always
	run check always

define sketchpad the_end
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="This is the end; thank you very much for participating!!<br /><br />FIrst lets talk about your reward - we will now individually check your results and see<br />how many points you managed to collect. If you managed to get more than<br />40,000 points, then you will get a bonus payment of 0.5 pounds 💰<br /><br />If you managed to get more than<br />50,000 points, then you will get a bonus payment of 1 pounds 📈<br /><br />If you managed to get more than<br />60,000 points, then you will get a bonus payment of 1.5 pounds 💸<br /><br />If you somehow managed to get more than 70,000 points, you will instead get a <br />bonus payment of 2 pounds (I will be very impressed if anyone manages<br />this because I myself was not able to reach this benchmark!)<br /><br />Below is a brief explanation of what we wanted to investigate in this experiment:<br /><br />This experiment was meant to test a paradigm we will now test in a fMRI scanner.<br />Our main research question was whether you would start searching for the distractor<br />even though it was not your target, because the distractor indicated how much reward<br />you would get. So similar to how someone who is addicted to cigarettes will <br />subconciously be on the lookout for cigarettes in their environment.<br /><br />That is it! Pretty boring, but that's research ¯\\_(ツ)_/¯.<br /><br />Press any key to continue..." x=0 y=0 z_index=0

define keyboard_response the_end_keypress
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses e

define sketchpad trial
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="prf-01.png" scale=0.2 show_if="[bar1]" x=0 y="[barloc]" z_index=1
	draw image center=1 file="prf-02.png" scale=0.2 show_if="[bar2]" x="[barloc]" y=0 z_index=1
	draw circle color="#646464" fill=0 penwidth=240 r=320 show_if=True x=0 y=0 z_index=1
	draw fixdot color=black show_if=True style="large-open" x=0 y=0 z_index=1
	draw line color="[L0_color]" penwidth=30 show_if=True x1="[L0_x1]" x2="[L0_x2]" y1="[L0_y1]" y2="[L0_y2]" z_index=1
	draw line color="[L1_color]" penwidth=30 show_if=True x1="[L1_x1]" x2="[L1_x2]" y1="[L1_y1]" y2="[L1_y2]" z_index=1
	draw line color="[L2_color]" penwidth=30 show_if=True x1="[L2_x1]" x2="[L2_x2]" y1="[L2_y1]" y2="[L2_y2]" z_index=1
	draw line color="[L3_color]" penwidth=30 show_if=True x1="[L3_x1]" x2="[L3_x2]" y1="[L3_y1]" y2="[L3_y2]" z_index=1
	draw line color="[L4_color]" penwidth=30 show_if=True x1="[L4_x1]" x2="[L4_x2]" y1="[L4_y1]" y2="[L4_y2]" z_index=1
	draw line color="[L5_color]" penwidth=30 show_if=True x1="[L5_x1]" x2="[L5_x2]" y1="[L5_y1]" y2="[L5_y2]" z_index=1
	draw line color="[L6_color]" penwidth=30 show_if=True x1="[L6_x1]" x2="[L6_x2]" y1="[L6_y1]" y2="[L6_y2]" z_index=1
	draw line color="[L7_color]" penwidth=30 show_if=True x1="[L7_x1]" x2="[L7_x2]" y1="[L7_y1]" y2="[L7_y2]" z_index=1
	draw circle color="#646464" fill=1 penwidth=1 r=8 show_if=True x="[D0_x]" y="[D0_y]" z_index=0
	draw circle color="#646464" fill=1 penwidth=1 r=8 show_if=True x="[D1_x]" y="[D1_y]" z_index=0
	draw circle color="#646464" fill=1 penwidth=1 r=8 show_if=True x="[D2_x]" y="[D2_y]" z_index=0
	draw circle color="#646464" fill=1 penwidth=1 r=8 show_if=True x="[D3_x]" y="[D3_y]" z_index=0

define keyboard_response trial_keyboard_response
	set timeout 1750
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "s;a"

define loop trial_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 120
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 dist_col 0
	setcycle 0 loc_dist 1
	setcycle 0 loc_tar 3
	setcycle 1 dist_col 0
	setcycle 1 loc_dist 1
	setcycle 1 loc_tar 5
	setcycle 2 dist_col 0
	setcycle 2 loc_dist 1
	setcycle 2 loc_tar 7
	setcycle 3 dist_col 0
	setcycle 3 loc_dist 3
	setcycle 3 loc_tar 1
	setcycle 4 dist_col 0
	setcycle 4 loc_dist 3
	setcycle 4 loc_tar 5
	setcycle 5 dist_col 0
	setcycle 5 loc_dist 3
	setcycle 5 loc_tar 7
	setcycle 6 dist_col 0
	setcycle 6 loc_dist 5
	setcycle 6 loc_tar 1
	setcycle 7 dist_col 0
	setcycle 7 loc_dist 5
	setcycle 7 loc_tar 3
	setcycle 8 dist_col 0
	setcycle 8 loc_dist 5
	setcycle 8 loc_tar 7
	setcycle 9 dist_col 0
	setcycle 9 loc_dist 7
	setcycle 9 loc_tar 1
	setcycle 10 dist_col 0
	setcycle 10 loc_dist 7
	setcycle 10 loc_tar 3
	setcycle 11 dist_col 0
	setcycle 11 loc_dist 7
	setcycle 11 loc_tar 5
	setcycle 12 dist_col 1
	setcycle 12 loc_dist 1
	setcycle 12 loc_tar 3
	setcycle 13 dist_col 1
	setcycle 13 loc_dist 1
	setcycle 13 loc_tar 5
	setcycle 14 dist_col 1
	setcycle 14 loc_dist 1
	setcycle 14 loc_tar 7
	setcycle 15 dist_col 1
	setcycle 15 loc_dist 3
	setcycle 15 loc_tar 1
	setcycle 16 dist_col 1
	setcycle 16 loc_dist 3
	setcycle 16 loc_tar 5
	setcycle 17 dist_col 1
	setcycle 17 loc_dist 3
	setcycle 17 loc_tar 7
	setcycle 18 dist_col 1
	setcycle 18 loc_dist 5
	setcycle 18 loc_tar 1
	setcycle 19 dist_col 1
	setcycle 19 loc_dist 5
	setcycle 19 loc_tar 3
	setcycle 20 dist_col 1
	setcycle 20 loc_dist 5
	setcycle 20 loc_tar 7
	setcycle 21 dist_col 1
	setcycle 21 loc_dist 7
	setcycle 21 loc_tar 1
	setcycle 22 dist_col 1
	setcycle 22 loc_dist 7
	setcycle 22 loc_tar 3
	setcycle 23 dist_col 1
	setcycle 23 loc_dist 7
	setcycle 23 loc_tar 5
	setcycle 24 dist_col 2
	setcycle 24 loc_dist 1
	setcycle 24 loc_tar 3
	setcycle 25 dist_col 2
	setcycle 25 loc_dist 1
	setcycle 25 loc_tar 5
	setcycle 26 dist_col 2
	setcycle 26 loc_dist 1
	setcycle 26 loc_tar 7
	setcycle 27 dist_col 2
	setcycle 27 loc_dist 3
	setcycle 27 loc_tar 1
	setcycle 28 dist_col 2
	setcycle 28 loc_dist 3
	setcycle 28 loc_tar 5
	setcycle 29 dist_col 2
	setcycle 29 loc_dist 3
	setcycle 29 loc_tar 7
	setcycle 30 dist_col 2
	setcycle 30 loc_dist 5
	setcycle 30 loc_tar 1
	setcycle 31 dist_col 2
	setcycle 31 loc_dist 5
	setcycle 31 loc_tar 3
	setcycle 32 dist_col 2
	setcycle 32 loc_dist 5
	setcycle 32 loc_tar 7
	setcycle 33 dist_col 2
	setcycle 33 loc_dist 7
	setcycle 33 loc_tar 1
	setcycle 34 dist_col 2
	setcycle 34 loc_dist 7
	setcycle 34 loc_tar 3
	setcycle 35 dist_col 2
	setcycle 35 loc_dist 7
	setcycle 35 loc_tar 5
	setcycle 36 dist_col 3
	setcycle 36 loc_dist 1
	setcycle 36 loc_tar 3
	setcycle 37 dist_col 3
	setcycle 37 loc_dist 1
	setcycle 37 loc_tar 5
	setcycle 38 dist_col 3
	setcycle 38 loc_dist 1
	setcycle 38 loc_tar 7
	setcycle 39 dist_col 3
	setcycle 39 loc_dist 3
	setcycle 39 loc_tar 1
	setcycle 40 dist_col 3
	setcycle 40 loc_dist 3
	setcycle 40 loc_tar 5
	setcycle 41 dist_col 3
	setcycle 41 loc_dist 3
	setcycle 41 loc_tar 7
	setcycle 42 dist_col 3
	setcycle 42 loc_dist 5
	setcycle 42 loc_tar 1
	setcycle 43 dist_col 3
	setcycle 43 loc_dist 5
	setcycle 43 loc_tar 3
	setcycle 44 dist_col 3
	setcycle 44 loc_dist 5
	setcycle 44 loc_tar 7
	setcycle 45 dist_col 3
	setcycle 45 loc_dist 7
	setcycle 45 loc_tar 1
	setcycle 46 dist_col 3
	setcycle 46 loc_dist 7
	setcycle 46 loc_tar 3
	setcycle 47 dist_col 3
	setcycle 47 loc_dist 7
	setcycle 47 loc_tar 5
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	setcycle 96 dist_col 99
	setcycle 96 loc_dist 9
	setcycle 96 loc_tar 1
	setcycle 97 dist_col 99
	setcycle 97 loc_dist 9
	setcycle 97 loc_tar 3
	setcycle 98 dist_col 99
	setcycle 98 loc_dist 9
	setcycle 98 loc_tar 5
	setcycle 99 dist_col 99
	setcycle 99 loc_dist 9
	setcycle 99 loc_tar 7
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	run trial_sequence

define inline_javascript trial_script
	set description "Executes Python code"
	set _run ""
	___prepare__
	vars.trial_nr += 1 ;
	vars.block_trial += 1
	
	vars.iti1 = getRandomInt(1000,2000)
	vars.iti2 = getRandomInt(1000,2000)
	feedback = (1 == getRandomInt(1,2,3))
	if (practice){feedback = (1==1)}
	
	// 1. Define Colors and Shuffle them
	// var colors = ['red', 'blue', 'green', 'orange', 'purple', 'yellow', 'pink', 'cyan'];
	// var colors = ["#ef729d", "#e38250", "#c19d33", "#82b557", "#56bca6", "#50b1e6", "#8199f8", "#bd83df"];
	// var shuffled_colors = shuffle(colors);
	
	// 4. Orientation Logic
	var base_orientation = getRandomInt(0, 1); // 0 = Vertical, 1 = Horizontal
	
	// 5. Assign Coordinates for ALL 8 locations
	for (let i = 0; i < 8; i++) {
	    let loc = locations[i];
	    
	    // Check if THIS specific line should be the singleton
	    // It flips the orientation only if it's the chosen index and singleton is active
	    let current_line_orientation = base_orientation;
	    if (i === loc_tar) {
	        current_line_orientation = 1 - base_orientation; // Flip 0 to 1 or 1 to 0
	    }
	
	    if (current_line_orientation === 0) {
	        // Vertical
	        this['L' + i + '_x1'] = loc.x;
	        this['L' + i + '_x2'] = loc.x;
	        this['L' + i + '_y1'] = loc.y - offset;
	        this['L' + i + '_y2'] = loc.y + offset;
	    } else {
	        // Horizontal
	        this['L' + i + '_x1'] = loc.x - offset;
	        this['L' + i + '_x2'] = loc.x + offset;
	        this['L' + i + '_y1'] = loc.y;
	        this['L' + i + '_y2'] = loc.y;
	    }
	    
	    // this['L' + i + '_color'] = shuffled_colors[i];
	    if (i == loc_dist) {this['L' + i + '_color'] = colors[dist_col]}
	    else {this['L' + i + '_color'] = grey_}
	}
	
	// Dot location assignment
	target_dot = 0
	var dot_locs = shuffle(locations);
	for (let i = 0; i < 4; i++) {
	    let loc = dot_locs[i];
	    if(loc == locations[loc_tar]){target_dot = 1}
	    this['D' + i + '_x'] = loc.x;
	    this['D' + i + '_y'] = loc.y;
	}
	
	// 6. Final logic
	
	var correct_response = ['a', 's'][target_dot];
	
	var barloc = bar_locs[trial_nr%8]
	var bar1 = (1==1)
	var bar2 = (1==2)
	if (trial_nr%16 > 7){var bar1 = (1==2);
	                    var bar2 = (1==1)}
	                
	__end__

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run trial_script True
	run trial True
	run trial_keyboard_response True
	run update_block_stats True
	run break_screen "[break_screen] == 1"
	run pre_feedback True
	run points_feedback True
	run post_stim True
	run logger True

define inline_javascript update_block_stats
	set description "Executes Python code"
	___run__
	vars.block_rt_cnt = vars.block_rt_cnt + response_time
	vars.block_acc_cnt = vars.block_acc_cnt + vars.correct
	
	vars.agg_rt_cnt = vars.agg_rt_cnt + response_time
	vars.agg_acc_cnt = vars.agg_acc_cnt + vars.correct
	
	var trial_points = 0
	var incorrect = (1==1)
	if(correct){trial_points = Math.round((1-(response_time/1750))*100);
	            incorrect = (1==2)}
	            
	if (feedback == (1==2)){incorrect = (1==2)}
	var text_col = grey_   
	if (loc_dist < 9){text_col = colors[dist_col];
	                trial_points = trial_points*points_key[dist_col]}
	                    
	var agg_points = agg_points + trial_points
	
	var break_screen = 0
	if(block_trial%60 == 0){break_screen = 1;
	                        feedback = (1==2);
	                        incorrect = (1==2);
	                        
	                        vars.agg_rt = Math.round(vars.agg_rt_cnt/vars.trial_nr)/1000;
	                        vars.agg_acc = Math.round((vars.agg_acc_cnt/vars.trial_nr)*100);
	                        
	                        vars.block_rt = Math.round(vars.block_rt_cnt/vars.block_trial)/1000;
	                        vars.block_acc = Math.round((vars.block_acc_cnt/vars.block_trial)*100);
	                        
	                        vars.block_rt_cnt = 0;
	                        vars.block_acc_cnt = 0;
	                        
	                        vars.block += 1}
	__end__
	set _prepare ""

define inline_javascript vars
	set description "Executes Python code"
	___run__
	function shuffle(array) {
		array = array.slice()
	    let counter = array.length;
		while (counter > 0) {
	        let index = Math.floor(Math.random() * counter);
	        counter--;
	        let temp = array[counter];
	        array[counter] = array[index];
	        array[index] = temp;
	    }
	    return array
	};
	
	function getRandomInt(min, max){
	    min = Math.ceil(min);
	    max = Math.floor(max);
	    return Math.floor(Math.random() * (max - min + 1)) + min;
	};
	
	// var participantId = jatos.urlQueryParameters.PROLIFIC_PID
	
	vars.loc_dist = 0
	
	vars.trial_nr = 0
	
	vars.practice = 1
	
	vars.block = -1
	
	vars.block_trial = 0
	
	vars.feedback = 1
	
	vars.iti = 1
	
	vars.bar_locs = [-175,-125,-75,-25,25,75,125,175]
	
	vars.barloc = -175
	
	vars.bar1 = 0
	
	vars.bar2 = 0
	
	vars.trial_points = 0
	
	vars.agg_points = 0
	
	vars.break_screen = 0
	
	vars.block_rt_cnt = 0
	vars.block_acc_cnt = 0
	vars.agg_rt_cnt = 0
	vars.agg_acc_cnt = 0
	
	vars.response_gender = 'X'
	vars.response_age_10 = 0
	vars.response_age_01 = 0
	vars.response_init_10 = 'X'
	vars.response_init_01 = 'X'
	vars.gender = 'XXX'
	
	// Pick a random location object
	var random_loc = {x: 0, y: 0}
	
	// Assign to specific variables for use in your draw commands
	var trial_x = random_loc.x;
	var trial_y = random_loc.y;
	
	var c4 = '#d56f2c' //orange
	var c3 = '#b58800'
	var c2 = '#769f29'
	var c1 = '#00ab78' //green
	
	var grey_ = "#8f8f8f"
	
	var condition = getRandomInt(0,1)
	
	if (condition == 1){var colors = [c1,c2,c3,c4];
	                    var high_val_col = 'green';
	                    var low_val_col = 'orange'}
	else {var colors = [c4,c3,c2,c1];
	                    var high_val_col = 'orange';
	                    var low_val_col = 'green'}
	
	var h1 = colors[0]
	var h2 = colors[1]
	var l1 = colors[2]
	var l2 = colors[3]
	
	var points_key = [10,5,2,1]
	
	var diameter = 600; 
	var radius = diameter / 2;
	var offset = 60;
	var locations = [];
	
	for (var i = 0; i < 8; i++) {
	    // Starts at -90 degrees (top) and moves clockwise every 45 degrees
	    var angle = (i * Math.PI / 4) - (Math.PI / 2);
	    locations.push({
	        x: Math.round(radius * Math.cos(angle)),
	        y: Math.round(radius * Math.sin(angle))
	    });
	}
	
	var L0_x1=0, L0_x2=0, L0_y1=0, L0_y2=0;
	var L1_x1=0, L1_x2=0, L1_y1=0, L1_y2=0;
	var L2_x1=0, L2_x2=0, L2_y1=0, L2_y2=0;
	var L3_x1=0, L3_x2=0, L3_y1=0, L3_y2=0;
	var L4_x1=0, L4_x2=0, L4_y1=0, L4_y2=0;
	var L5_x1=0, L5_x2=0, L5_y1=0, L5_y2=0;
	var L6_x1=0, L6_x2=0, L6_y1=0, L6_y2=0;
	
	var D0_x=0, D0_Y=0;
	var D1_x=0, D1_Y=0;
	var D2_x=0, D2_Y=0;
	var D3_x=0, D3_Y=0;
	
	var loop_count = 1
	
	console.log('variables assigned')
	__end__
	set _prepare ""

